PsychoPy2experiment version="3.0.0b9"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1440, 900]
  expName = TBPMnBack
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Routines
  Routine Feedback
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        msg='';
      Begin Routine:
        # set whatever keypress values are appropriate for this trial: if practiceLoop.thisN == 0:      one_back = 'Not applicable' # initial value
        if stimFile == one_back and respPractice == 'y':     msg="Correct! RT=" + resp.rt
        elif stimFile != one_back and respPractice == 'y':
            msg="Correct! RT=" + resp.rt
        else:
            msg="Correct! RT="
      End Routine:
        one_back = stimFile
    TextComponent textFeedback
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $msg
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  Routine InstructionsPractice
    TextComponent textPractice
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Practice
        Você deve pressionar a tecla de espaço se a imagem na tela for a mesma da imagem imediatamente anterior.
        You must press the space key if the image on the screen is the same as the immediately previous image.
        You must press the M key to reset the clock each time one minute passes.
        To find out how much time has passed since you started to see the images you can press the z key.
    KeyboardComponent respPract
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine InstructionsExperiment
    TextComponent textExperiment
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Experiment
        Você deve pressionar a tecla de espaço se a imagem na tela for a mesma da imagem imediatamente anterior.
        You must press the space key if the image on the screen is the same as the immediately previous image.
        You must press the M key to reset the clock each time one minute passes.
        To find out how much time has passed since you started to see the images you can press the z key.
    KeyboardComponent respExpText
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thanks
    TextComponent textThanks
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Obrigado
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  Routine experimentTrial
    ImageComponent imageExperiment
      image = $stimFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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    NoiseStimComponent noiseExperiment
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 1
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  Routine ExperimentTrial
    ImageComponent imageExp
      image = $stimFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .7
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    NoiseStimComponent noise_3
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 1.0
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  Routine Holaexperimento
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = listo
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    KeyboardComponent key_resp_5
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice
    KeyboardComponent respPractice
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image [set every repeat] = $stimFile
      size = (0.5,0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = .7
      units = height
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    NoiseStimComponent noise_2
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = 0.7
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  Routine readyMessage
    TextComponent textTask
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Bloque nuevo
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    KeyboardComponent respTask
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine valencedTrial
    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        x = randint(low = 1, high = 5)
    ImageComponent image_2
      image [set every repeat] = $stimFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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    NoiseStimComponent noise
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = x
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  Routine WelcomeScreen
    TextComponent textWS
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Bem vindo.
        Leia as instrucoes no papel.
    KeyboardComponent respWS
      allowedKeys = 't'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracticeRoutine
    CodeComponent code
      Code Type = Py
      Begin Routine:
        x = randint(low = 1, high = 5)
    ImageComponent imageprobando
      image [set every repeat] = $stimFile
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.7
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    NoiseStimComponent noisePractice
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 1
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseType = Binary
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.7
      stopVal [duration (s)] = x
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Flow
  Routine WelcomeScreen
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 3
    conditionsFile = chooseBlock.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'negativeBlock.csv'), ('readyMsg', 'Pronto')]),
      OrderedDict([('condsFile', 'NeutralBlock.csv'), ('readyMsg', 'Pronto')]),
      OrderedDict([('condsFile', 'positiveBlock.csv'), ('readyMsg', 'Pronto')]),
      OrderedDict([('condsFile', 'practiceBlock.csv'), ('readyMsg', 'Pronto')])]
    Routine InstructionsPractice
    LoopInitiator trialsPractice loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine PracticeRoutine
    LoopTerminator trialsPractice
  LoopTerminator trials
  Routine InstructionsExperiment
  LoopInitiator conditionsLoop loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = chooseBlock.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'negativeBlock.csv'), ('readyMsg', 'Pronto?')]),
      OrderedDict([('condsFile', 'NeutralBlock.csv'), ('readyMsg', 'Pronto?')]),
      OrderedDict([('condsFile', 'positiveBlock.csv'), ('readyMsg', 'Pronto?')]),
      OrderedDict([('condsFile', 'practiceBlock.csv'), ('readyMsg', 'Pronto?')])]
    Routine readyMessage
    LoopInitiator experimentalLoop loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = random
      nReps = 1
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      Routine valencedTrial
    LoopTerminator experimentalLoop
  LoopTerminator conditionsLoop
  Routine Thanks
